PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = letternumber
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Routines
  Routine qtr
    PolygonComponent quadhor
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      shape = line
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent quadvert
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori = 90
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        numpy.random.shuffle(letter)
        numpy.random.shuffle(number)

        n = number[0,0]
        l = letter[0,0]

        if n == y:
            n = number[1,0]

        if l == z:
            l = letter[1,0]

        d = (l+''+ str(n))


        display = str(d)

        y = n
        z = l

        if k == 4:
            k = 0

        pos = s[k]

        k = k + 1
      End Routine:
        outfile.write(subNum)
        outfile.write("\t")
        outfile.write(display)
        outfile.write("\t")

        if (pos[0] == -.4 and pos[1] == .3): outfile.write( "switch" )
        elif (pos[0] == .4 and pos[1] == -.3): outfile.write( "switch" )
        else: outfile.write( "repeat" )

        outfile.write("\t")
        outfile.write(str(pos[0]) + "," + str(pos[1]))
        outfile.write("\t")
        outfile.write(str(key_resp.keys))
        outfile.write("\t")

        response = key_resp.keys
        if not response: outfile.write("Miss")
        elif (((pos[0] == -.4 and pos[1] == .3) or (pos[0] == .4 and pos[1] == .3)) and response is 'z' and number[0,1] == 0): outfile.write( "Correct" )
        elif (((pos[0] == -.4 and pos[1] == .3) or (pos[0] == .4 and pos[1] == .3)) and response is 'm' and number[0,1] == 1): outfile.write( "Correct" )
        elif (((pos[0] == -.4 and pos[1] == -.3) or (pos[0] == .4 and pos[1] == -.3)) and response is 'z' and letter[0,1] == 0): outfile.write( "Correct" )
        elif (((pos[0] == -.4 and pos[1] == -.3) or (pos[0] == .4 and pos[1] == -.3)) and response is 'm' and letter[0,1] == 1): outfile.write( "Correct" )
        else: outfile.write( "Incorrect")

        outfile.write("\t")
        outfile.write( str(key_resp.rt*1000) )
        outfile.write("\n")


        outfile2.write(subNum)
        outfile2.write("\t")
        outfile2.write(display)
        outfile2.write("\t")

        if (pos[0] == -.4 and pos[1] == .3): outfile2.write( "switch" )
        elif (pos[0] == .4 and pos[1] == -.3): outfile2.write( "switch" )
        else: outfile2.write( "repeat" )

        outfile2.write("\t")
        outfile2.write(str(pos[0]) + "," + str(pos[1]))
        outfile2.write("\t")
        outfile2.write(str(key_resp.keys))
        outfile2.write("\t")

        response = key_resp.keys
        if not response: outfile2.write("Miss")
        elif (((pos[0] == -.4 and pos[1] == .3) or (pos[0] == .4 and pos[1] == .3)) and response is 'z' and number[0,1] == 0): outfile2.write( "Correct" )
        elif (((pos[0] == -.4 and pos[1] == .3) or (pos[0] == .4 and pos[1] == .3)) and response is 'm' and number[0,1] == 1): outfile2.write( "Correct" )
        elif (((pos[0] == -.4 and pos[1] == -.3) or (pos[0] == .4 and pos[1] == -.3)) and response is 'z' and letter[0,1] == 0): outfile2.write( "Correct" )
        elif (((pos[0] == -.4 and pos[1] == -.3) or (pos[0] == .4 and pos[1] == -.3)) and response is 'm' and letter[0,1] == 1): outfile2.write( "Correct" )
        else: outfile2.write( "Incorrect")

        outfile2.write("\t")
        outfile2.write( str(key_resp.rt*1000) )
        outfile2.write("\n")
    TextComponent text
      color = black
      letterHeight = .1
      pos [set every repeat] = pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $display
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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  Routine instructions
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        subNum = expInfo['participant']
        sessionNum = expInfo['session']

        outfile= open("./data/letternumber.txt","a+")
        outfile.write("subject")
        outfile.write("\t")
        outfile.write("stimuli")
        outfile.write("\t")
        outfile.write("trial type")
        outfile.write("\t")
        outfile.write("position")
        outfile.write("\t")
        outfile.write("response")
        outfile.write("\t")
        outfile.write("acc")
        outfile.write("\t")
        outfile.write("rt")
        outfile.write("\n")
        outfile.write("\n")

        outfile2= open("./data/" + subNum + "_" + sessionNum + "_ln.txt", "w+")
        outfile2.write("timestamp: ")
        outfile2.write(expInfo['date'])
        outfile2.write("\n")
        outfile2.write("subject")
        outfile2.write("\t")
        outfile2.write("stimuli")
        outfile2.write("\t")
        outfile2.write("trial type")
        outfile2.write("\t")
        outfile2.write("position")
        outfile2.write("\t")
        outfile2.write("response")
        outfile2.write("\t")
        outfile2.write("acc")
        outfile2.write("\t")
        outfile2.write("rt")
        outfile2.write("\n")
    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        You will see letter-number pairs (e.g. G9) in one of four quadrants displayed on the computer monitor.

        When the letter-number pair is in the top half of the screen, indicate whether the number is odd ("M") or even ("Z") using the keyboard.

        When the letter-number pair is in the bottom half of the screen, indicate whether the letter is a vowel ("M") or consonant ("Z") using the keyboard.

        Respond as quickly and accurately as possible.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_instructions
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You have completed the experiment!
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    KeyboardComponent key_resp_2
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reminder
    TextComponent text_4
      color = black
      letterHeight = .05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        As a reminder:

        When the letter pair is presented in the top half of the screen:
        M=Odd
        Z=Even

        When the letter pair is presented in the bottom half of the screen:
        M=Vowel
        Z=Consonant

        Press the Spacebar to begin the experiment.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        import numpy

        letter = numpy.array([["G", 0], ["K", 0], ["M", 0], ["R", 0], ["A", 1], ["E", 1], ["I", 1], ["U", 1]])
        number = numpy.array([[2, 0], [4, 0], [6, 0], [8, 0], [3, 1], [5, 1], [7, 1], [9, 1]])


        y =0
        z = 0

        sn = numpy.array([[-.4,.3],[.4,.3]])
        sl = numpy.array([[.4,-.3],[-.4,-.3]])
        s = numpy.array([[-.4,.3],[.4,.3],[.4,-.3],[-.4,-.3]])
        k = 0

        pos = 0
        display = 'zzz'
  Routine pract_num
    PolygonComponent polygon
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      shape = line
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori = 90
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        import numpy

        letter = numpy.array([["G", 0], ["K", 0], ["M", 0], ["R", 0], ["A", 1], ["E", 1], ["I", 1], ["U", 1]])
        number = numpy.array([[2, 0], [4, 0], [6, 0], [8, 0], [3, 1], [5, 1], [7, 1], [9, 1]])


        y =0
        z = 0

        sn = numpy.array([[-.4,.3],[.4,.3]])
        sl = numpy.array([[.4,-.3],[-.4,-.3]])
        s = numpy.array([[-.4,.3],[.4,.3],[.4,-.3],[-.4,-.3]])
        k = 0

        display = 'zzz'
      Begin Routine:
        numpy.random.shuffle(letter)
        numpy.random.shuffle(number)

        n = number[0,0]
        l = letter[0,0]

        if n == y:
            n = number[1,0]

        if l == z:
            l = letter[1,0]

        d = (l+''+ str(n))


        display = str(d)

        y = n
        z = l

        if k == 2:
            k = 0

        pos = sn[k]

        k = k + 1
      End Routine:
        outfile2.write(subNum)
        outfile2.write("\t")
        outfile2.write(display)
        outfile2.write("\t")

        if (pos[0] == -.4 and pos[1] == .3): outfile2.write( "repeat" )
        elif (pos[0] == .4 and pos[1] == .3): outfile2.write( "repeat" )
        else: outfile2.write( "repeat" )

        outfile2.write("\t")
        outfile2.write(str(pos[0]) + "," + str(pos[1]))
        outfile2.write("\t")
        outfile2.write(str(key_resp_5.keys))
        outfile2.write("\t")

        #response = key_resp_5.keys
        #if not response: outfile2.write("Miss")
        #elif (((pos[0] == -.4 and pos[1] == .3) or (pos[0] == .4 and pos[1] == .3)) and response is 'z' and number[0,1] == 0): outfile2.write( "Correct" )
        #elif (((pos[0] == -.4 and pos[1] == .3) or (pos[0] == .4 and pos[1] == .3)) and response is 'm' and number[0,1] == 1): outfile2.write( "Correct" )
        #elif (((pos[0] == -.4 and pos[1] == -.3) or (pos[0] == .4 and pos[1] == -.3)) and response is 'z' and letter[0,1] == 0): outfile2.write( "Correct" )
        #elif (((pos[0] == -.4 and pos[1] == -.3) or (pos[0] == .4 and pos[1] == -.3)) and response is 'm' and letter[0,1] == 1): outfile2.write( "Correct" )
        #else: outfile2.write( "Incorrect")

        response = key_resp_5.keys
        if not response: outfile2.write("Miss")
        elif (((pos[0] == -.4 and pos[1] == .3) or (pos[0] == .4 and pos[1] == .3)) and response is 'z' and number[0,1] == 0): outfile2.write( "Correct" )
        elif (((pos[0] == -.4 and pos[1] == .3) or (pos[0] == .4 and pos[1] == .3)) and response is 'm' and number[0,1] == 1): outfile2.write( "Correct" )
        elif (((pos[0] == -.4 and pos[1] == -.3) or (pos[0] == .4 and pos[1] == -.3)) and response is 'z' and letter[0,1] == 0): outfile2.write( "Correct" )
        elif (((pos[0] == -.4 and pos[1] == -.3) or (pos[0] == .4 and pos[1] == -.3)) and response is 'm' and letter[0,1] == 1): outfile2.write( "Correct" )
        else: outfile2.write( "Incorrect")

        outfile2.write("\t")
        outfile2.write( str(key_resp_5.rt*1000) )
        outfile2.write("\t")
        outfile2.write( 'practice numbers' )
        outfile2.write("\n")
    TextComponent text_5
      color = black
      letterHeight = 0.1
      pos [set every repeat] = pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $display
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    KeyboardComponent key_resp_5
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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  Routine pract_let
    PolygonComponent polygon_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      shape = line
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_4
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori = 90
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        import numpy

        letter = numpy.array([["G", 0], ["K", 0], ["M", 0], ["R", 0], ["A", 1], ["E", 1], ["I", 1], ["U", 1]])
        number = numpy.array([[2, 0], [4, 0], [6, 0], [8, 0], [3, 1], [5, 1], [7, 1], [9, 1]])


        y = 0
        z = 0

        sn = numpy.array([[-.4,.3],[.4,.3]])
        sl = numpy.array([[.4,-.3],[-.4,-.3]])
        s = numpy.array([[-.4,.3],[.4,.3],[.4,-.3],[-.4,-.3]])
        k = 0

        display = 'zzz'
      Begin Routine:
        numpy.random.shuffle(letter)
        numpy.random.shuffle(number)

        n = number[0,0]  ##diplay
        h = number[0,1]  ##logic

        l = letter[0,0]  ##display
        j = letter[0,1]  ##logic

        if n == y:
            n = number[1,0]
            h = number[1,1]

        if l == z:
            l = letter[1,0]
            j = letter[1,1]


        d = (l+''+ str(n))


        display = str(d)

        y = n
        z = l

        if k == 2:
            k = 0

        pos = sl[k]

        k = k + 1
      End Routine:
        outfile2.write(subNum)
        outfile2.write("\t")
        outfile2.write(display)
        outfile2.write("\t")

        if (pos[0] == -.4 and pos[1] == -.3): outfile2.write( "repeat" )
        elif (pos[0] == .4 and pos[1] == -.3): outfile2.write( "repeat" )
        else: outfile2.write( "repeat" )

        outfile2.write("\t")
        outfile2.write(str(pos[0]) + "," + str(pos[1]))
        outfile2.write("\t")
        outfile2.write(str(key_resp_6.keys))
        outfile2.write("\t")

        response = key_resp_6.keys
        if not response: outfile2.write("Miss")
        elif ((pos[1] == .3) and response is 'z' and h == 0): outfile2.write( "Correct" )
        elif ((pos[1] == .3) and response is 'm' and h == 1): outfile2.write( "Correct" )
        elif ((pos[1] == -.3) and response is 'z' and j == '0'): outfile2.write( "Correct" )
        elif ((pos[1] == -.3) and response is 'm' and j == '1'): outfile2.write( "Correct" )
        else: outfile2.write( "Incorrect")

        outfile2.write("\t")
        outfile2.write( str(key_resp_6.rt*1000) )
        outfile2.write("\t")
        outfile2.write( 'practice letters' )
        outfile2.write("\n")
    TextComponent text_6
      color = black
      letterHeight = 0.1
      pos [set every repeat] = pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $display
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    KeyboardComponent key_resp_6
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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  Routine fixation_cross
    TextComponent text_7
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    CodeComponent code_6
      Code Type = Py
  Routine grid
    PolygonComponent polygon_5
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      shape = line
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent polygon_6
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori = 90
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine prac_complete
    TextComponent text_8
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        You have complete the practice section of this task.

        You will now move on to the experiment.

        Press the spacebar when you are ready to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
      End Routine:
        #k=0
  Routine practice_instructions_numbers
    TextComponent text_9
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        You will now complete practice trials of this task.

        When the letter pair is presented in the top half of the screen:

        M=Odd
        Z=Even

        Press the Spacebar to begin the practice trials.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_instructions_letters
    TextComponent text_10
      color = black
      letterHeight = .05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        You will now complete practice trials of this task.

        When the letter pair is presented in the bottom half of the screen:

        M=Vowel
        Z=Consonant

        Press the Spacebar to begin the practice trials.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine practice_instructions_numbers
  Routine fixation_cross
  Routine grid
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine pract_num
  LoopTerminator trials_2
  Routine practice_instructions_letters
  Routine grid
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine pract_let
  LoopTerminator trials_3
  Routine prac_complete
  Routine reminder
  Routine fixation_cross
  Routine grid
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 152
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    Routine qtr
  LoopTerminator trials
  Routine end_instructions
