PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 3.1.2
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = Sequence
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Routines
  Routine instruction2
    TextComponent text_2
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Your goal is to press the corresponding button as quickly as possible when a rectangle on the screen is shaded black. Press the button that corresponds to that rectangle location from left to right.

        Please respond as quickly as possible, but it is important that you wait until the rectangle is shaded. Please do not respond until the rectangle changes color!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
    TextComponent text_3
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Finally, sometimes you will be pressing buttons in a random order. Again, please press them as quickly as possible.

        When you see the letter “R” that means the upcoming button presses will be random. When you see the letter “S” that means the upcoming button presses are part of the sequence you are to learn. The beginning of the sequence is denoted by a red box.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PleaseWait
    TextComponent text_4
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please Wait
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    CodeComponent code_7
      Code Type = Py
      End Routine:
        import time

        start_time_block = time.perf_counter()
  Routine SequenceRS
    TextComponent text_5
      color = Black
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $sequence
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        start_time = time.perf_counter()
  Routine blank
    ImageComponent image_2
      image = $image_name/InstructionCues/InstrcutionCue5.PNG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine EndInstructions
    TextComponent text_6
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the experiment!
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    KeyboardComponent key_resp_6
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        outfile2.write("timestamp: ")
        outfile2.write(expInfo['date'])
  Routine instruction
    TextComponent text
      color = black
      letterHeight = .1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        In this task your goal is to learn a sequence. You will see four rectangles in the center of the screen that represent your left middle, left index, right index, and right middle fingers.

        Please place your fingers over the response box, as instructed previously, when performing this task.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent output
      Code Type = Py
      Begin Experiment:
        subNum = expInfo['participant']
        sessionNum = expInfo['session']
        outfile= open("./data/sequence.txt","a+")
        outfile.write("subject")
        outfile.write("\t")
        outfile.write("stim")
        outfile.write("\t")
        outfile.write("sequence")
        outfile.write("\t")
        outfile.write("trial")
        outfile.write("\t")
        outfile.write("cue")
        outfile.write("\t")
        outfile.write("response")
        outfile.write("\t")
        outfile.write("accuracy")
        outfile.write("\t")
        outfile.write("rt")
        outfile.write("\t")
        outfile.write("trial.onset")
        outfile.write("\t")
        outfile.write("trial.duration")
        outfile.write("\n")



        outfile2= open("./data/" + subNum + "_" + sessionNum + "_sequence.txt", "a+")
        outfile2.write("timestamp: ")
        outfile2.write(expInfo['date'])
        outfile2.write("\n")
        outfile2.write("subject")
        outfile2.write("\t")
        outfile2.write("stim")
        outfile2.write("\t")
        outfile2.write("sequence")
        outfile2.write("\t")
        outfile2.write("trial")
        outfile2.write("\t")
        outfile2.write("cue")
        outfile2.write("\t")
        outfile2.write("response")
        outfile2.write("\t")
        outfile2.write("accuracy")
        outfile2.write("\t")
        outfile2.write("rt")
        outfile2.write("\t")
        outfile2.write("trial.onset")
        outfile2.write("\t")
        outfile2.write("trial.duration")
        outfile2.write("\t")
        outfile2.write("block.duration")
        outfile2.write("\n")
  Routine SequenceS
    ImageComponent image_5
      image [set every repeat] = $image_name_sequence
      saveStartStop = False
      size = (2,2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .21
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    ImageComponent image_4
      image [set every repeat] = InstructionCues/InstructionCue5.PNG
      saveStartStop = False
      size = (2,2)
      startVal [time (s)] = .19
      stopVal [duration (s)] = .812
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        counterS = counterS + 1

        trial_onset_time = time.perf_counter() - start_time

        if counterS > 35:
            trials.finished = 1
      End Routine:
        block_end_time = time.perf_counter() - start_time

        outfile.write(subNum)
        outfile.write("\t")
        outfile.write(sessionNum)
        outfile.write("\t")
        outfile.write(sequence)
        outfile.write("\t")
        outfile.write(str(counterS))
        outfile.write("\t")
        outfile.write(image_name_sequence)
        outfile.write("\t")
        #response
        if not key_resp_7.keys : #if no response
            outfile.write("Miss")
        else:
            outfile.write(str(key_resp_7.keys))
        outfile.write("\t")
        #accuracy
        if not key_resp_7.keys : #if no response
            outfile.write("Miss")
        else:
            outfile.write(str(key_resp_7.corr))
        outfile.write("\t")
        #rt
        if not key_resp_7.keys : #if no response
            outfile.write("0")
        else:
            outfile.write(str(key_resp_7.rt*1000))
        outfile.write("\t")
        outfile.write(str(trial_onset_time))
        outfile.write("\t")
        outfile.write(str(t))
        outfile.write("\n")


        outfile2.write(subNum)
        outfile2.write("\t")
        outfile2.write(sessionNum)
        outfile2.write("\t")
        outfile2.write(sequence)
        outfile2.write("\t")
        outfile2.write(str(counterS))
        outfile2.write("\t")
        outfile2.write(image_name_sequence)
        outfile2.write("\t")
        #response
        if not key_resp_7.keys : #if no response
            outfile2.write("Miss")
        else:
            outfile2.write(str(key_resp_7.keys))
        outfile2.write("\t")
        #accuracy
        if not key_resp_7.keys : #if no response
            outfile2.write("Miss")
        else:
            outfile2.write(str(key_resp_7.corr))
        outfile2.write("\t")
        #rt
        if not key_resp_7.keys : #if no response
            outfile2.write("0")
        else:
            outfile2.write(str(key_resp_7.rt*1000))
        outfile2.write("\t")
        outfile2.write(str(trial_onset_time))
        outfile2.write("\t")
        outfile2.write(str(t))
        outfile2.write("\t")
        outfile2.write(str(block_end_time))
        outfile2.write("\n")
    KeyboardComponent key_resp_7
      allowedKeys = '1','2','3','4','a','b','c','d','A','B','C','D'
      correctAns = $responseS
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.002
      store = first key
      storeCorrect = True
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  Routine SequenceR
    ImageComponent image
      image [set every repeat] = $image_name_random
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .21
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    ImageComponent image_3
      image [set every repeat] = InstructionCues/InstructionCue5.PNG
      saveStartStop = False
      size = (2,2)
      startVal [time (s)] = 0.19
      stopVal [duration (s)] = .812
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        counterR = counterR + 1

        trial_onset_time = time.perf_counter() - start_time

        if counterR > 17:
            trials.finished = 1
      End Routine:
        if key_resp_5.corr != 0 or counterR > 17:
            trials_4.finished = 1

        block_end_time = time.perf_counter() - start_time

        outfile.write(subNum)
        outfile.write("\t")
        outfile.write(sessionNum)
        outfile.write("\t")
        outfile.write(sequence)
        outfile.write("\t")
        outfile.write(str(counterR))
        outfile.write("\t")
        outfile.write(image_name_random)
        outfile.write("\t")
        #response
        if not key_resp_5.keys : #if no response
            outfile.write("Miss")
        else:
            outfile.write(str(key_resp_5.keys))
        outfile.write("\t")
        #accuracy
        if not key_resp_5.keys : #if no response
            outfile.write("Miss")
        else:
            outfile.write(str(key_resp_5.corr))
        outfile.write("\t")
        #rt
        if not key_resp_5.keys : #if no response
            outfile.write("0")
        else:
            outfile.write(str(key_resp_5.rt*1000))
        outfile.write("\t")
        outfile.write(str(trial_onset_time))
        outfile.write("\t")
        outfile.write(str(t))
        outfile.write("\n")


        outfile2.write(subNum)
        outfile2.write("\t")
        outfile2.write(sessionNum)
        outfile2.write("\t")
        outfile2.write(sequence)
        outfile2.write("\t")
        outfile2.write(str(counterR))
        outfile2.write("\t")
        outfile2.write(image_name_random)
        outfile2.write("\t")
        #response
        if not key_resp_5.keys : #if no response
            outfile2.write("Miss")
        else:
            outfile2.write(str(key_resp_5.keys))
        outfile2.write("\t")
        #accuracy
        if not key_resp_5.keys : #if no response
            outfile2.write("Miss")
        else:
            outfile2.write(str(key_resp_5.corr))
        outfile2.write("\t")
        #rt
        if not key_resp_5.keys : #if no response
            outfile2.write("0")
        else:
            outfile2.write(str(key_resp_5.rt*1000))
        outfile2.write("\t")
        outfile2.write(str(trial_onset_time))
        outfile2.write("\t")
        outfile2.write(str(t))
        outfile2.write("\t")
        outfile2.write(str(block_end_time))
        outfile2.write("\n")
    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','4','a','b','c','d','A','B','C','D'
      correctAns = $responseR
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.002
      store = first key
      storeCorrect = True
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  Routine choosesequence
    CodeComponent code_4
      Code Type = Py
  Routine sequenceselect
    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
        responseR = 0
        responseS = 0

        counterR = 0
        counterS = 0
      Begin Routine:
        if sequence == 'R':
            responseR = 1
            responseS = 0
        else:
            responseR = 0
            responseS = 1



        counterR = 0
        counterS = 0
  Routine trigger
    TextComponent text_trigger
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'T','t'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockduration
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        block_end_time = time.perf_counter() - start_time

        task_time = time.perf_counter() - start_time_block
      End Routine:
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write(str(block_end_time))
        outfile2.write("\t")
        outfile2.write(str(task_time))
        outfile2.write("\n")
  Routine fixcross
    TextComponent text_7
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = +
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  Routine instruction4
    TextComponent text_8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        You will complete three runs of this task. Within each run, you will complete 5 blocks.

        Each run will last about 5 minutes.

        Questions?
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  Routine instruction2
  Routine instruction3
  Routine instruction4
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine PleaseWait
    Routine trigger
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = sequence.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('sequence', 'S')]),
        OrderedDict([('sequence', 'R')]),
        OrderedDict([('sequence', 'S')]),
        OrderedDict([('sequence', 'S')]),
        OrderedDict([('sequence', 'R')]),
        OrderedDict([('sequence', 'S')]),
        OrderedDict([('sequence', 'S')]),
        OrderedDict([('sequence', 'S')]),
        OrderedDict([('sequence', 'R')])]
      Routine SequenceRS
      Routine sequenceselect
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = image_name_random.xlsx
        loopType = random
        nReps = responseR
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        conditions:
          [OrderedDict([('image_name_random', 'InstructionCues/InstructionCue1.PNG'), ('responseR', 1)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue2.PNG'), ('responseR', 2)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue3.PNG'), ('responseR', 3)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue4.PNG'), ('responseR', 4)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue1.PNG'), ('responseR', 1)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue2.PNG'), ('responseR', 2)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue3.PNG'), ('responseR', 3)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue4.PNG'), ('responseR', 4)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue1.PNG'), ('responseR', 1)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue2.PNG'), ('responseR', 2)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue3.PNG'), ('responseR', 3)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue4.PNG'), ('responseR', 4)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue1.PNG'), ('responseR', 1)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue2.PNG'), ('responseR', 2)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue3.PNG'), ('responseR', 3)]),
          OrderedDict([('image_name_random', 'InstructionCues/InstructionCue4.PNG'), ('responseR', 4)])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
        LoopInitiator trials_4 loopType="TrialHandler"
          loopType = random
          nReps = 18
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          Routine SequenceR
        LoopTerminator trials_4
      LoopTerminator trials
      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = image_name_sequnce.xlsx
        loopType = sequential
        nReps = responseS
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        conditions:
          [OrderedDict([('image_name_sequence', 'InstructionCues/RedInstructionCue1.PNG'), ('responseS', 1)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue3.PNG'), ('responseS', 3)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue2.PNG'), ('responseS', 2)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue3.PNG'), ('responseS', 3)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue4.PNG'), ('responseS', 4)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue2.PNG'), ('responseS', 2)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/RedInstructionCue1.PNG'), ('responseS', 1)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue3.PNG'), ('responseS', 3)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue2.PNG'), ('responseS', 2)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue3.PNG'), ('responseS', 3)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue4.PNG'), ('responseS', 4)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue2.PNG'), ('responseS', 2)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/RedInstructionCue1.PNG'), ('responseS', 1)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue3.PNG'), ('responseS', 3)]),
          OrderedDict([('image_name_sequence', 'InstructionCues/InstructionCue2.PNG'), ('responseS', 2)])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
        Routine SequenceS
      LoopTerminator trials_2
      Routine blockduration
    LoopTerminator trials_3
    Routine fixcross
  LoopTerminator block
  Routine EndInstructions
