PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = 3.1.2
  Window size (pixels) = [1440, 900]
  color = White
  expName = sternberg
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Routines
  Routine exampleinstructions
    TextComponent text_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        For example, at the beginning of a trial, you may see:

                                                   A Q H D B

        Following this you will be presented letters, one at a time, such as:

                                                           n

        Since this letter is not one of the original 5, you would press the button under your right middle finger.

        You will need to make a quick, but accurate decision.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndInstructions
    TextComponent text_10
      color = Black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = You have completed the experiment!
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    KeyboardComponent key_resp_7
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        outfile2.write("timestamp: ")
        outfile2.write(expInfo['date'])
  Routine prompt
    TextComponent text_6
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Get ready for the letters
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  Routine Stimuli
    TextComponent fixcross
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        ##Import allows you to bring in a package, random package randomizes stimuli
        import random
        import numpy
        import string
        import operator

        #This is an array within an array that contains all eligible letters in both lower and uppercase form
        array = [['A','a'], ['B','b'], ['D','d'], ['E','e'], ['F','f'], ['G','g'], ['H','h'], ['J','j'], ['K','k'], ['M','m'], ['N','n'], ['Q','q'], ['R','r'], ['T','t'], ['U','u'], ['W','w'], ['Y','y']]

        #This is the difficulty
        x = [1,5,7]
        #This shuffles the array at the beginning of the experiment only
        #y = random.shuffle(x)

        #placeholder text
        stimuli_txt = 'zzz'

        blocknumber = 0
        blockcount = 0
      Begin Routine:
        #This shuffles the order of the letter arrays within the larger array.
        #For example [A, a] will stay the same, but [A, a] might not be in the first possition, but the 4th.
        random.shuffle(array)

        correctarray = [1,1,1,1,1,1,0,0,0,0,0,0,0,0,0,0]
        random.shuffle(correctarray)

        #This sets the random letters to be displayed.
        #A capital (cap) and lower (low) case letter is displayed.
        #In the array[x][x], the first [x] tells you which letter will be used and the second[x] tells you whether the letter is upper [0] or lower[1] case
        cap1 = array[0][0]
        low1 = array[0][1]
        cap2 = array[1][0]
        low2 = array[1][1]
        cap3 = array[2][0]
        low3 = array[2][1]
        cap4 = array[3][0]
        low4 = array[3][1]
        cap5 = array[4][0]
        low5 = array[4][1]
        cap6 = array[5][0]
        low6 = array[5][1]
        cap7 = array[6][0]
        low7 = array[6][1]


        #This randomly choses the difficulty
        difficulty = random.choice(x)

        #This detemines which letters to display based on the randomly chosen level of difficulty from the previous step.
        #The letters are pulled from the arrays above.
        if difficulty == 1:
            stimuli_txt= (cap1)
        elif difficulty == 5:
            stimuli_txt= (cap1 + ' ' + cap2 + ' ' + cap3 + ' '+ cap4 + ' ' + cap5)
        elif difficulty == 7:
            stimuli_txt= (cap1 + ' ' + cap2 + ' ' + cap3 + ' '+ cap4 + ' ' + cap5 + ' '+ cap6 + ' '+ cap7)

        #This deletes the difficulty just displayed from the array created in the 'Begin Experiment' (x) so that only the difficulties written in the 'x' are presented
        x.remove(difficulty)

        trialnumber = 0
      End Routine:
        blocknumber = blocknumber + 1
        blockcount = blockcount + 1
    TextComponent text_4
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 6.2
      text [set every repeat] = $stimuli_txt
      wrapWidth = 12
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  Routine PleaseWait
    TextComponent text_7
      color = Black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = Please Wait
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        start_time_block = time.perf_counter()
  Routine instructions_2
    TextComponent text_3
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        You will complete three runs of this task. Within each run, you will complete three study blocks, each block with different letters.

        Each run will last about 4 minutes.

        Questions?
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine responsecross
  Routine Response
    TextComponent text_8
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .8
      text = +
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        #placeholder text
        response_txt ='zzz'
      Begin Routine:
        #This picks a random letter from the letter array set in the stimuli routine
        k = random.choice(array[difficulty:16])
        #this ensures the letter chosen in k is lower case
        m = k[1]
        #This sets the letters for level 1 difficulty from the letter array set in the stimuli routine
        n = random.choice([low1])
        #This sets the letters for level 5 and 7 difficulty from the letter array set in the stimuli routine
        o = random.choice([low1,low2,low3,low4,low5])
        p = random.choice([low1,low2,low3,low4,low5,low6,low7])

        #this makes sure that at least 40% of trials contain a correct response
        if difficulty == 1:
            if correctarray[trialnumber] == 1:
                correct = 1
                response_txt = n
            else:
                response_txt = m
                correct = 0
        elif difficulty == 5:
            if correctarray[trialnumber] == 1:
                correct = 1
                response_txt = o
            else:
                response_txt = m
                correct = 0
        elif difficulty == 7:
            if correctarray[trialnumber] == 1:
                correct = 1
                response_txt = p
            else:
                response_txt = m
                correct = 0


        trial_onset_time = time.perf_counter() - start_time
      End Routine:
        outfile.write(subNum)
        outfile.write("\t")
        outfile.write(sessionNum)
        outfile.write("\t")
        outfile.write(str(blockcount))
        outfile.write("\t")
        outfile.write(str(blocknumber))
        outfile.write("\t")
        outfile.write(stimuli_txt)
        outfile.write("\t")
        outfile.write(str(trialnumber+1))
        outfile.write("\t")
        outfile.write(response_txt)
        outfile.write("\t")
        outfile.write(str(key_resp_5.keys))
        outfile.write("\t")

        response = key_resp_5.keys

        if not key_resp_5.keys: outfile.write("Miss")
        elif correct == 1 and response is 'c': outfile.write( "Correct" )
        elif correct == 0 and response is 'd': outfile.write( "Correct" )
        else: outfile.write( "Incorrect")

        outfile.write("\t")
        outfile.write( str(key_resp_5.rt*1000) )
        outfile.write("\t")
        outfile.write(str(trial_onset_time))
        outfile.write("\t")
        outfile.write(str(t))
        outfile.write("\n")


        outfile2.write(subNum)
        outfile2.write("\t")
        outfile2.write(sessionNum)
        outfile2.write("\t")
        outfile2.write(str(blockcount))
        outfile2.write("\t")
        outfile2.write(str(blocknumber))
        outfile2.write("\t")
        outfile2.write(stimuli_txt)
        outfile2.write("\t")
        outfile2.write(str(trialnumber+1))
        outfile2.write("\t")
        outfile2.write(response_txt)
        outfile2.write("\t")
        outfile2.write(str(key_resp_5.keys))
        outfile2.write("\t")

        response = key_resp_5.keys

        if not key_resp_5.keys: outfile2.write("Miss")
        elif correct == 1 and response is 'c': outfile2.write( "Correct" )
        elif correct == 0 and response is 'd': outfile2.write( "Correct" )
        else: outfile2.write( "Incorrect")

        outfile2.write("\t")
        outfile2.write( str(key_resp_5.rt*1000) )
        outfile2.write("\t")
        outfile2.write(str(trial_onset_time))
        outfile2.write("\t")
        outfile2.write(str(t))
        outfile2.write("\n")


        trialnumber=trialnumber+1
    TextComponent text_5
      color = black
      letterHeight = 0.25
      startVal [time (s)] = .8
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $response_txt
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    KeyboardComponent key_resp_5
      allowedKeys = '1','2','c','d','C','D'
      forceEndRoutine = False
      startVal [time (s)] = .8
      stopVal [duration (s)] = 1.2
      store = first key
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  Routine Instructions
    TextComponent text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        The goal for this task is to correctly identify letters presented to you at the beginning of a trial.

        At the beginning of each trial you will be presented with, and must remember, a string of either 1, 5, or 7 capitalized letters.

        Following the presentation of the letters, you will be presented individual lower case letters, one at a time. They will be presented at a rate of 1 letter per second. You will need to decide whether the letter presented to you was one of the original letters presented at the beginning of the trial.

        If the letter was one of the original letters, you will press the button under your right pointer finger.
        If the letter was not one of the original letters, you will press the button under your right middle finger.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent outputfile
      Code Type = Py
      Begin Experiment:
        subNum = expInfo['participant']
        sessionNum = expInfo['session']
        outfile= open("./data/sternberg.txt","a+")
        outfile.write("subject")
        outfile.write("\t")
        outfile.write("stim")
        outfile.write("\t")
        outfile.write("block")
        outfile.write("\t")
        outfile.write("block_run")
        outfile.write("\t")
        outfile.write("letterset")
        outfile.write("\t")
        outfile.write("trial")
        outfile.write("\t")
        outfile.write("lettershown")
        outfile.write("\t")
        outfile.write("response")
        outfile.write("\t")
        outfile.write("acc")
        outfile.write("\t")
        outfile.write("rt")
        outfile.write("\t")
        outfile.write("trial.onset")
        outfile.write("\t")
        outfile.write("trial.duration")
        outfile.write("\n")


        outfile2= open("./data/" + subNum + "_" + sessionNum + "_sternberg.txt", "a+")
        outfile2.write("timestamp: ")
        outfile2.write(expInfo['date'])
        outfile2.write("\n")
        outfile2.write("subject")
        outfile2.write("\t")
        outfile2.write("stim")
        outfile2.write("\t")
        outfile2.write("block")
        outfile2.write("\t")
        outfile2.write("block_run")
        outfile2.write("\t")
        outfile2.write("letterset")
        outfile2.write("\t")
        outfile2.write("trial")
        outfile2.write("\t")
        outfile2.write("lettershown")
        outfile2.write("\t")
        outfile2.write("response")
        outfile2.write("\t")
        outfile2.write("acc")
        outfile2.write("\t")
        outfile2.write("rt")
        outfile2.write("\t")
        outfile2.write("trial.onset")
        outfile2.write("\t")
        outfile2.write("trial.duration")
        outfile2.write("\t")
        outfile2.write("block.duration")
        outfile2.write("\n")
  Routine fixation_cross
    TextComponent text_9
      color = Black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.8
      text = +
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  Routine prompt2
    TextComponent text_11
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
      text = +
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  Routine trigger
    TextComponent text_12
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'T','t'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
    TextComponent text_13
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Get ready for the letters
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        import time
      End Routine:
        start_time = time.perf_counter()
  Routine blockduration
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        block_end_time = time.perf_counter() - start_time

        task_time = time.perf_counter() - start_time_block
      End Routine:
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write("\t")
        outfile2.write(str(block_end_time))
        outfile2.write("\t")
        outfile2.write(str(task_time))
        outfile2.write("\n")


        if blocknumber > 2:
            x = [1,5,7]
            blocknumber = 0
Flow
  Routine Instructions
  Routine exampleinstructions
  Routine instructions_2
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine PleaseWait
    Routine trigger
    Routine wait
    LoopInitiator blockrepeat loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine prompt
      Routine Stimuli
      Routine fixation_cross
      LoopInitiator responserepeat loopType="TrialHandler"
        loopType = fullRandom
        nReps = 16
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        Routine Response
      LoopTerminator responserepeat
      Routine blockduration
      Routine prompt2
    LoopTerminator blockrepeat
  LoopTerminator block
  Routine EndInstructions
